PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Delay Discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/91932/Desktop/Conditions File_Delay Discounting.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 15), ('future_reward', 16), ('delay', 25)]),
      OrderedDict([('reward_today', 20), ('future_reward', 25), ('delay', 28)]),
      OrderedDict([('reward_today', 25), ('future_reward', 30), ('delay', 29)]),
      OrderedDict([('reward_today', 4), ('future_reward', 58), ('delay', 40)]),
      OrderedDict([('reward_today', 12), ('future_reward', 34), ('delay', 13)]),
      OrderedDict([('reward_today', 60), ('future_reward', 62), ('delay', 15)]),
      OrderedDict([('reward_today', 13), ('future_reward', 19), ('delay', 16)]),
      OrderedDict([('reward_today', 14), ('future_reward', 18), ('delay', 17)]),
      OrderedDict([('reward_today', 9), ('future_reward', 29), ('delay', 28)]),
      OrderedDict([('reward_today', 4), ('future_reward', 56), ('delay', 29)]),
      OrderedDict([('reward_today', 15), ('future_reward', 150), ('delay', 37)]),
      OrderedDict([('reward_today', 12), ('future_reward', 120), ('delay', 47)]),
      OrderedDict([('reward_today', 3), ('future_reward', 33), ('delay', 45)])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
    Routine trial
  LoopTerminator trials
